
load_file("../parser/L23_LBC_cSTUT189_1/loadcell.hoc")
load_file("utils/cellCheck.hoc")
// load_file("../NEURON/utils/cellCheck.hoc")

// For testing...
                      
//forall {if (ismembrane("Ih")) { uninsert Ih } }
//forall {if (ismembrane("Ca_HVA")) { uninsert Ca_HVA } }
//forall {if (ismembrane("Ca_LVAst")) { uninsert Ca_LVAst } }
//forall {if (ismembrane("Ca")) { uninsert Ca } }
//forall {if (ismembrane("SKv3_1")) { uninsert SKv3_1 } }
//forall {if (ismembrane("SK_E2")) { uninsert SK_E2 } }
//forall {if (ismembrane("Nap_Et2")) { uninsert Nap_Et2 } }
//forall {if (ismembrane("Im")) { uninsert Im } }
//forall {if (ismembrane("K_Tst")) { uninsert K_Tst } }
//forall {if (ismembrane("NaTa_t")) { uninsert NaTa_t } }
//forall {if (ismembrane("K_Pst")) { uninsert K_Pst } }
//forall {if (ismembrane("NaTs2_t")) { uninsert NaTs2_t } }

forall {
    if (ismembrane("StochKv")) { 

        insert StochKv_deterministic
        gmax_StochKv_deterministic = 1e-4 * gkbar_StochKv
        uninsert StochKv 
    } 
}

tstop=3000

create_recording()

create_stimulus("stepcurrent3")

psection()

simulate()

save_recording()

//quit()

