usegui = 1

{load_file("stdlib.hoc")}
{load_file("stdgui.hoc")}


create Soma
access Soma

celsius = 6.3

Soma {pt3dclear() pt3dadd(0.0, 0, 0.0, 13.4715) pt3dadd(0.0, 23.1694, 0.0, 13.4715)}
define_shape()

forall Ra = 100

insert pas 
{ g_pas=3.38e-05 }
{ e_pas=-90 }

insert StochKv_deterministic 
{ gmax_StochKv_deterministic=0.0002 }


proc initialiseValues0() {

    forall  v = -90

}

objref fih0
{fih0 = new FInitializeHandler(0, "initialiseValues0()")}

objref stim1 
objref stim2 


Soma {
    stim1 = new IClamp(0.5)
    stim1.del = 100.0
    stim1.dur = 500.0
    stim1.amp = -0.01
    
    stim2 = new IClamp(0.5)
    stim2.del = 800.0
    stim2.dur = 500.0
    stim2.amp = 0.05
}



tstop = 1600.0
dt = 0.01


objref v_time
objref f_time

v_time = new Vector()
{ v_time.record(&t) }
//{ v_time.resize(70001) } // false
f_time = new File()


objref Soma_v
{ Soma_v = new Vector() }
{ Soma_v.record(&Soma.v(0.5))} 
objref f_Soma_v


objref GraphWin_0
objref GraphWin_1
objref GraphWin_2
objref GraphWin_3

if (usegui==1) {
    GraphWin_0 = new Graph(0)
    {GraphWin_0.size(0, tstop,-110.0,50.0)}
    {GraphWin_0.view(0, -110.0, tstop, 160.0, 80, 330, 330, 250)}
    {
        GraphWin_0.addexpr("Soma.v", "Soma.v(0.5)", 1, 1, 0.8, 0.9, 2)
        //graphList[0].append(GraphWin_0)
    }
/*
    GraphWin_1 = new Graph(0)
    {GraphWin_1.size(0, tstop,-0.1,1.1)}
    {GraphWin_1.view(0, -0.1, tstop, 1.2, 80, 330, 330, 250)}
    {
        GraphWin_1.addexpr("m_Ih", "m_Ih", 1, 1, 0.8, 0.9, 2)
        GraphWin_1.addexpr("m_Im", "m_Im", 2, 1, 0.8, 0.9, 2)
        GraphWin_1.addexpr("m_KdShu2007", "m_KdShu2007", 3, 1, 0.8, 0.9, 2)
        GraphWin_1.addexpr("h_KdShu2007", "h_KdShu2007", 4, 1, 0.8, 0.9, 2)
        GraphWin_1.addexpr("m_Ca", "m_Ca", 5, 1, 0.8, 0.9, 2)
        GraphWin_1.addexpr("h_Ca", "h_Ca", 6, 1, 0.8, 0.9, 2)
        //graphList[0].append(GraphWin_1)
    }*/

}

{run()}

strdef timeFilename


f_Soma_v = new File()
strdef filename
{sprint(filename, "Soma.dat")}
f_Soma_v.wopen(filename)
Soma_v.printf(f_Soma_v)
f_Soma_v.close()



{ sprint(timeFilename, "%s",  "time.dat")}
{ f_time.wopen(timeFilename) }
{ v_time.printf(f_time) }
{ f_time.close() }

objref f_Soma_si
f_Soma_si = new File()
{ f_Soma_si.wopen("Soma.si.dat") }
for i=0, Soma_v.size()-1 {
   f_Soma_si.printf("%f\t%f\n", v_time.x[i]/1000, Soma_v.x[i]/1000)
}
{ f_Soma_si.close() }




if (usegui==1) {
    //   This code pops up a simple Run Control

    {
    xpanel("RunControl", 0)
    v_init = -60.0
    xbutton("Init & Run","run()")
    xbutton("Stop","stoprun=1")
    t = 0
    xvalue("t","t", 2 )
    tstop = 700.0
    xvalue("Tstop","tstop", 1,"tstop_changed()", 0, 1 )
    dt = 0.01
     xvalue("dt","dt", 1,"setdt()", 0, 1 )
    xpanel(80,80)
    }
}

forall psection()
